PsychoPy2experiment version="2026.1.0"
Settings
  expName = Latent Keys
  expVersion = 0.1
  Audio lib = ptb
  End Message = Thank you for your participation!
  runMode = 0
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine task_trial
    RoutineSettingsComponent task_trial
      desc = The user constructs a key from components.
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    MouseComponent mouse
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
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    KeyboardComponent keyboard_response
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      forceEndRoutine = False
      allowedKeys = '1', '2', '3', '4', '6', '7', '8', '9'
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Flow
  Routine task_trial
